CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:406
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Elsewhere...|None
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
    Rows to process:1,1
    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Use advanced settings?:No

IdentifySecondaryObjects:[module_num:3|svn_version:'Unknown'|variable_revision_number:11|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigDNA
    Number of pixels by which to expand the primary objects:10
    Regularization factor:0.05

MeasureObjectIntensity:[module_num:4|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to measure:Nuclei
    Select images to measure:OrigDNA,OrigMito,OrigAGP,OrigRNA,OrigER,OrigBrightfield

ExportToSpreadsheet:[module_num:5|svn_version:'Unknown'|variable_revision_number:14|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Output file location:Default Output Folder|
    Add a prefix to file names?:Yes
    Filename prefix:measurements_
    Overwrite existing files without warning?:Yes
    Add image metadata columns to your object data file?:No
    Representation of Nan/Inf:NaN
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
